CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*(?P<well>[A-Z]\\\\d+)_s(?P<site>\\\\d+)_w(?P<channel>\\\\d).*\\\\.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*(\\\\\\\\|/)(?P<folder>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'folder', u'Tubulin': u'folder', u'Actin': u'folder'}, {u'Tubulin': u'well', u'DAPI': u'well', u'Actin': u'well'}, {u'Tubulin': u'site', u'DAPI': u'site', u'Actin': u'site'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channel "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "4")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:folder

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:Yes
    Name the averaged image:IllumDAPIAvg
    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Actin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:Yes
    Name the averaged image:IllumActinAvg
    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Tubulin
    Name the output image:IllumTubulin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:Yes
    Name the averaged image:IllumTubulinAvg
    Retain the dilated image?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumActin
    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<folder>_IllumActin
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:IllumDAPI
    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<folder>_IllumDAPI
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumTubulin
    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<folder>_IllumTubulin
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IllumActinAvg
    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<folder>_IllumActinAvg
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumDAPIAvg
    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<folder>_IllumDAPIAvg
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:IllumTubulinAvg
    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<folder>_IllumTubulinAvg
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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