CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:BF_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch6")
    Name to assign these images:DF_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch7")
    Name to assign these images:Marker_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
DefineGrid:[module_num:5|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notes:['The parameters in this module match the default values in the stitching script (that generates the image montages, see https://github.com/CellProfiler/stitching). The default values for the number of rows and number of columns is 30, image size is 55. If you changed the parameters in the stitching script, you need to adjust the parameters here accordingly (number of rows, number of columns, coordinates of the first and second cell).']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
    Name the grid:Grid
    Number of rows:30
    Number of columns:30
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Manual
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    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:27,27
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:82,82
    Row number of the second cell:2
    Column number of the second cell:2
    Retain an image of the grid?:No
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    Select the image on which to display the grid:BF_image
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:6|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
    Select the defined grid:Grid
    Name the objects to be identified:Tile_of_grid
    Select object shapes and locations:Rectangle Forced Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
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
MeasureObjectIntensity:[module_num:7|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notes:['Preliminary measurement of intensity in each tile']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
    Select images to measure:DF_image
    Select objects to measure:Tile_of_grid

FilterObjects:[module_num:8|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notes:['Exclude empty tiles']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
    Select the objects to filter:Tile_of_grid
    Name the output objects:Filtered_tiles
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_StdIntensity_DF_image
    Filter using a minimum measurement value?:Yes
    Minimum value:0.00002
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:9|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
    Select the input image:BF_image
    Name the output image:MaskBF
    Use objects or an image as a mask?:Objects
    Select object for mask:Filtered_tiles
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    Invert the mask?:No

Smooth:[module_num:10|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notes:['In this pipeline, the primary objects are identified base on their bright-field illumination. To avoid incomplete segmentation of such illumination signal, this module will fill the partial segmented objects (holes)']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
    Select the input image:MaskBF
    Name the output image:SmoothedBF
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
EnhanceEdges:[module_num:11|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notes:['Enhance the edges of each object']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
    Select the input image:SmoothedBF
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Closing:[module_num:12|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notes:['In this pipeline, the primary objects are identified base on their bright-field illumination. To avoid incomplete segmentation of such illumination signal, this module will further close the partial segmented objects (holes)']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
    Select the input image:EdgedImage
    Name the output image:MorphBf
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:13|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notes:['Identify objects based on their bright field illumination.', 'Be extra CAREFUL with declumping method â\x80\x9cShapeâ\x80\x9d. In imaging flow cytometry scenario, the cellular objects are most likely round. Thus declumping by â\x80\x9cShapeâ\x80\x9d would help. However in case the cells would be more likely elongated, e.g. fission yeasts or bacteria, do NOT use this method.']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
    Select the input image:MorphBf
    Name the primary objects to be identified:bf1
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.05
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:14|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notes:['Preliminary measurement of object size, to use later for filtering objects ']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
    Select object sets to measure:bf1
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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notes:['Remove non-cell small debris']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
    Select the objects to filter:bf1
    Name the output objects:FilteredBF
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectSizeShape:[module_num:16|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notes:['Preliminary measurement of object size, to use later for filtering objects ']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
    Select object sets to measure:FilteredBF
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExpandOrShrinkObjects:[module_num:17|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notes:['This module helps to limit a territory of each tile. So that, at the later step, each tile will be associate to only the smaller objects included within this region, not to relate to neighborâ\x80\x99s objects by mistake.']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
    Select the input objects:Filtered_tiles
    Name the output objects:Non_empty_tile
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

RelateObjects:[module_num:18|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notes:['Associate the objects with its parental tile']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
    Parent objects:Non_empty_tile
    Child objects:FilteredBF
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:19|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notes:['Keep only the biggest object in each tile, which are most likely a true cell']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
    Select the objects to filter:FilteredBF
    Name the output objects:BF_cells_on_grid_pre
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Non_empty_tile
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Select the measurement to filter by:AreaShape_Area
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
IdentifyObjectsInGrid:[module_num:20|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notes:['Assure each cell in the tile will be fully segmented']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
    Select the defined grid:Grid
    Name the objects to be identified:BF_cells_on_grid
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:BF_cells_on_grid_pre

ExpandOrShrinkObjects:[module_num:21|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notes:['The expanded BF objects are used for side scatter channel (SSC) measurements (also called DarkField). ']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
    Select the input objects:BF_cells_on_grid
    Name the output objects:SSC
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BF_image
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:BF_cells_on_grid

MeasureObjectSizeShape:[module_num:23|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
    Select object sets to measure:BF_cells_on_grid
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureGranularity:[module_num:24|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notes:['This pipeline is an example for measuring features in BF, DF and one additional marker channel. If you have more marker channels, then add another image (that you have defined in NamesAndTypes) in this module']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
    Select images to measure:BF_image, Marker_image, DF_image
    Measure within objects?:Yes
    Select objects to measure:BF_cells_on_grid, SSC
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:5

MeasureTexture:[module_num:25|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notes:['This pipeline is an example for measuring features in BF, DF and one additional marker channel. If you have more marker channels, then add another image (that you have defined in NamesAndTypes) in this module']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
    Select images to measure:BF_image, Marker_image
    Select objects to measure:BF_cells_on_grid
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureTexture:[module_num:26|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
    Select images to measure:DF_image
    Select objects to measure:SSC
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureObjectIntensity:[module_num:27|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notes:['This pipeline is an example for measuring features in BF, DF and one additional marker channel. If you have more marker channels, then add another image (that you have defined in NamesAndTypes) in this module']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
    Select images to measure:BF_image, Marker_image
    Select objects to measure:BF_cells_on_grid

MeasureObjectIntensity:[module_num:28|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
    Select images to measure:DF_image
    Select objects to measure:SSC

MeasureObjectIntensityDistribution:[module_num:29|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
    Select images to measure:BF_image, Marker_image
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:BF_cells_on_grid
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:30|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
    Select images to measure:DF_image
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:SSC
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:BF_cells_on_grid
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:SSC
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
